PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  runMode = 0
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Show mouse = True
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    PolygonComponent fixation
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      fillColor = white
      size = 0.2,0.2
      shape = circle
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    PolygonComponent polygon
      startVal [time (s)] = 1.0
      fillColor = aquamarine
      lineColor = aquamarine
      colorSpace = named
      size = 0.2,0.2
      shape = circle
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    KeyboardComponent key_resp
      startVal [time (s)] = 1.0
      forceEndRoutine = True
      allowedKeys = 'space'
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  Routine beep
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    SoundComponent sound_1
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
      sound [set every repeat] = $freq
      forceEndRoutine = False
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  Routine response
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    TextComponent text
      startVal [time (s)] = 0
      pos = 0,0.3
      text = Report the delay between the key press and the beep sound (0-999 ms). Click submit after entering the value. 
      letterHeight = 0.05
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    TextboxComponent textbox
      startVal [time (s)] = 0
      size = [0.5,0.5]
      editable = True
      letterHeight = 0.05
      lineSpacing = 1
      bold = False
      formattingSyntax = md
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    ButtonComponent button
      startVal [time (s)] = 0
      size = 0.3,0.1
      pos = 0,-0.3
      forceEndRoutine = True
      text = Submit
      letterHeight = 0.05
      bold = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    conditionsFile = ib_conditions.xlsx
    nReps = 34
    conditions = []
    endPoints = [0,1]
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    Routine trial
    Routine beep
    Routine response
  LoopTerminator trials
